opentrons/protocol-designer 6.1.0
schemaVersion: 6
protocolName: carbon stack trial 2
robot: {model: OT-2 Standard, deckId: ot2_standard}
defaultValues: {aspirate_mmFromBottom: 1, dispense_mmFromBottom: 0.5, touchTip_mmFromTop: -1, blowout_mmFromTop: 0}
pipettes:
  p1000_single_gen2: {mount: left}
  p300_single_gen2: {mount: right}
labware:
  Trash: {definitionId: opentrons/opentrons_1_trash_1100ml_fixed/1, location: 12}
  Opentrons 96 Filter Tip Rack 1000 µL: {definitionId: opentrons/opentrons_96_filtertiprack_1000ul/1, location: 10}
  (Retired) TipOne 96 Tip Rack 200 µL: {definitionId: opentrons/tipone_96_tiprack_200ul/1, location: 11}
  Trial2 54 Well Plate 5 µL: {definitionId: custom_beta/trial2_54_wellplate_5ul/1, location: 2}
  Opentrons 10 Tube Rack with Falcon 4x50 mL, 6x15 mL Conical: {definitionId: opentrons/opentrons_10_tuberack_falcon_4x50ml_6x15ml_conical/1, location: 9}
pipetteTiprackAssignments:
  p1000_single_gen2: opentrons/opentrons_96_filtertiprack_1000ul/1
  p300_single_gen2: opentrons/tipone_96_tiprack_200ul/1
ingredients:
  - air
ingredLocations:
  Opentrons 10 Tube Rack with Falcon 4x50 mL, 6x15 mL Conical:
    air {volume: 40}: A4
savedStepForms:
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single_gen2
  volume: 20
  path: multiDispense
  changeTip: once
  aspirate_labware: Opentrons 10 Tube Rack with Falcon 4x50 mL, 6x15 mL Conical
  aspirate_wells: A4
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  dispense_labware: Trial2 54 Well Plate 5 µL
  dispense_wells: A1-F1, A2-F2, A3-F3, A4-F4, A5-F5, A6-F6, A7-F7, A8-F8, A9-F9
  disposalVolume_checkbox: true
  disposalVolume_volume: 20
  blowout_location: source_well
labwareDefinitions:
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  custom_beta/trial2_54_wellplate_5ul/1:
    brand: {brand: trial2, brandId: [trial]}
    metadata: {displayName: Trial2 54 Well Plate 5 µL, displayCategory: wellPlate, displayVolumeUnits: µL, tags: []}
    dimensions: {xDimension: 127.47, yDimension: 161.5, zDimension: 15.5}
    parameters: {format: irregular, quirks: [], isTiprack: false, isMagneticModuleCompatible: false, loadName: trial2_54_wellplate_5ul}
    namespace: custom_beta
    version: 1
    wells:
      A1: {depth: 0.1, totalLiquidVolume: 5, shape: rectangular, xDimension: 5, yDimension: 5, x: 17.5, y: 23.5, z: 15.5}
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commands:
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- pickUpTip: {pipetteId: p300_single_gen2, labwareId: (Retired) TipOne 96 Tip Rack 200 µL, wellName: A1}
- aspirate: {pipetteId: p300_single_gen2, volume: 200, labwareId: Opentrons 10 Tube Rack with Falcon 4x50 mL, 6x15 mL Conical, wellName: A4, wellLocation: {origin: bottom, offset: {z: 1}}, flowRate: 46.43}
- dispense: {pipetteId: p300_single_gen2, volume: 20, labwareId: Trial2 54 Well Plate 5 µL, wellName: A1, wellLocation: {origin: bottom, offset: {z: 0.5}}, flowRate: 46.43}
- dispense: {pipetteId: p300_single_gen2, volume: 20, labwareId: Trial2 54 Well Plate 5 µL, wellName: B1, wellLocation: {origin: bottom, offset: {z: 0.5}}, flowRate: 46.43}
- dispense: {pipetteId: p300_single_gen2, volume: 20, labwareId: Trial2 54 Well Plate 5 µL, wellName: C1, wellLocation: {origin: bottom, offset: {z: 0.5}}, flowRate: 46.43}
- dispense: {pipetteId: p300_single_gen2, volume: 20, labwareId: Trial2 54 Well Plate 5 µL, wellName: D1, wellLocation: {origin: bottom, offset: {z: 0.5}}, flowRate: 46.43}
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